PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine Welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome!
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Wait
    TextComponent wait_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Waiting
    KeyboardComponent wait_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    ImageComponent Image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent Dot
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent sub_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    KeyboardComponent sig_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.2
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  Routine Term
    PolygonComponent rest_dot
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    KeyboardComponent rest_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 11.9
      stopVal [duration (s)] = 0.2
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Flow
  Routine Welcome
  Routine Wait
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator Imgs loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine Trial
    LoopTerminator Imgs
    Routine Term
  LoopTerminator Blocks
