PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine Welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = Welcome !
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest
    PolygonComponent Dot_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    KeyboardComponent sig_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 17
      stopVal [duration (s)] = 2
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  Routine Wait
    TextComponent wait_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Wait..
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    KeyboardComponent wait_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    ImageComponent Face
      image [set every repeat] = face_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Scene
      image [set every repeat] = $scene_image
      opacity = 0.3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent Dot
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.6
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    KeyboardComponent sub_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    KeyboardComponent sig_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.2
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Flow
  Routine Welcome
  Routine Wait
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = files/rowlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('row', '0:12')]),
      OrderedDict([('row', '12:24')]),
      OrderedDict([('row', '24:36')]),
      OrderedDict([('row', '36:48')]),
      OrderedDict([('row', '48:60')]),
      OrderedDict([('row', '60:72')]),
      OrderedDict([('row', '72:84')]),
      OrderedDict([('row', '84:96')]),
      OrderedDict([('row', '96:108')]),
      OrderedDict([('row', '108:120')]),
      OrderedDict([('row', '120:132')]),
      OrderedDict([('row', '132:144')])]
    LoopInitiator Imgs loopType="TrialHandler"
      Selected rows = $row
      conditionsFile = files/imglist.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('face_image', 'stim/face/face_141'), ('scene_image', 'stim/scene/scene_143')]),
        OrderedDict([('face_image', 'stim/face/face_115'), ('scene_image', 'stim/scene/scene_144')]),
        OrderedDict([('face_image', 'stim/face/face_112'), ('scene_image', 'stim/scene/scene_110')]),
        OrderedDict([('face_image', 'stim/face/face_124'), ('scene_image', 'stim/scene/scene_128')]),
        OrderedDict([('face_image', 'stim/face/face_123'), ('scene_image', 'stim/scene/scene_117')]),
        OrderedDict([('face_image', 'stim/face/face_140'), ('scene_image', 'stim/scene/scene_121')]),
        OrderedDict([('face_image', 'stim/face/face_122'), ('scene_image', 'stim/scene/scene_119')]),
        OrderedDict([('face_image', 'stim/face/face_125'), ('scene_image', 'stim/scene/scene_126')]),
        OrderedDict([('face_image', 'stim/face/face_113'), ('scene_image', 'stim/scene/scene_142')]),
        OrderedDict([('face_image', 'stim/face/face_114'), ('scene_image', 'stim/scene/scene_118')]),
        OrderedDict([('face_image', 'stim/face/face_10'), ('scene_image', 'stim/scene/scene_127')]),
        OrderedDict([('face_image', 'stim/face/face_17'), ('scene_image', 'stim/scene/scene_120')]),
        OrderedDict([('face_image', 'stim/face/face_28'), ('scene_image', 'stim/scene/scene_129')]),
        OrderedDict([('face_image', 'stim/face/face_21'), ('scene_image', 'stim/scene/scene_116')]),
        OrderedDict([('face_image', 'stim/face/face_26'), ('scene_image', 'stim/scene/scene_111')]),
        OrderedDict([('face_image', 'stim/face/face_19'), ('scene_image', 'stim/scene/scene_46')])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
      Routine Trial
    LoopTerminator Imgs
    Routine Rest
  LoopTerminator Blocks
