PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine Wait
  Routine Trial
    PolygonComponent Rec_M
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
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    PolygonComponent Rec_R
      fillColor = $[1,1,1]
      pos = (0.4, 0)
      shape = rectangle
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
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    PolygonComponent Rec_L
      fillColor = $[1,1,1]
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
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    PolygonComponent Diamond
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      ori = 45
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent Resp_sub
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent Resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Wait
  Routine Trial
