PsychoPy2experiment version="2020.1.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = types
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome!
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block
    ImageComponent imgs
      image [set every repeat] = $face_image
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent poly
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine rest
    PolygonComponent rest_poly
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18.0
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    TextComponent rest_text
      letterHeight = 0.1
      startVal [time (s)] = 13.0
      stopVal [duration (s)] = 5.0
      text = This test is 
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  Routine startsoon
    PolygonComponent start_poly
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is Face test.
        press the space bar when you ready.
Flow
  Routine welcome
  Routine startsoon
  LoopInitiator Trial loopType="TrialHandler"
    conditionsFile = files/select_rows.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('select_row', '0:12')]),
      OrderedDict([('select_row', '12:24')]),
      OrderedDict([('select_row', '24:36')])]
    LoopInitiator Block loopType="TrialHandler"
      Selected rows = $select_row
      conditionsFile = files/all_images.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('face_image', 'stim/face/face_97.tif'), ('scene_image', 'stim/scene/scene_1.tif')]),
        OrderedDict([('face_image', 'stim/face/face_98.tif'), ('scene_image', 'stim/scene/scene_10.tif')]),
        OrderedDict([('face_image', 'stim/face/face_99.tif'), ('scene_image', 'stim/scene/scene_104.tif')]),
        OrderedDict([('face_image', 'stim/face/face_96.tif'), ('scene_image', 'stim/scene/scene_102.tif')]),
        OrderedDict([('face_image', 'stim/face/face_93.tif'), ('scene_image', 'stim/scene/scene_100.tif')]),
        OrderedDict([('face_image', 'stim/face/face_8.tif'), ('scene_image', 'stim/scene/scene_101.tif')]),
        OrderedDict([('face_image', 'stim/face/face_81.tif'), ('scene_image', 'stim/scene/scene_103.tif')]),
        OrderedDict([('face_image', 'stim/face/face_78.tif'), ('scene_image', 'stim/scene/scene_106.tif')]),
        OrderedDict([('face_image', 'stim/face/face_70.tif'), ('scene_image', 'stim/scene/scene_107.tif')]),
        OrderedDict([('face_image', 'stim/face/face_75.tif'), ('scene_image', 'stim/scene/scene_105.tif')]),
        OrderedDict([('face_image', 'stim/face/face_72.tif'), ('scene_image', 'stim/scene/scene_108.tif')]),
        OrderedDict([('face_image', 'stim/face/face_69.tif'), ('scene_image', 'stim/scene/scene_111.tif')]),
        OrderedDict([('face_image', 'stim/face/face_63.tif'), ('scene_image', 'stim/scene/scene_112.tif')]),
        OrderedDict([('face_image', 'stim/face/face_64.tif'), ('scene_image', 'stim/scene/scene_115.tif')]),
        OrderedDict([('face_image', 'stim/face/face_60.tif'), ('scene_image', 'stim/scene/scene_109.tif')])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
      Routine block
    LoopTerminator Block
    Routine rest
  LoopTerminator Trial
